# Generated by Configurator on Wed Jul 13 11:06:46 PDT 2016

# Reset
Property,Core,Initialize,0

# Devices
Device,Camera-1,PVCAM,Camera-1

# Pre-init settings for devices

# Pre-init settings for COM ports

# Hub (parent) references

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions

# Roles
Property,Core,Camera,Camera-1
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels

# Configuration presets
# Group: CameraMode
# Preset: 100MHz 16bit
ConfigGroup,CameraMode,100MHz 16bit,Camera-1,ReadoutRate,100MHz 16bit

# Preset: 200MHz 12bit
ConfigGroup,CameraMode,200MHz 12bit,Camera-1,ReadoutRate,200MHz 12bit


# Group: Clearing
# Preset: Never
ConfigGroup,Clearing,Never,Camera-1,ClearMode,Never

# Preset: Pre-Sequence
ConfigGroup,Clearing,Pre-Sequence,Camera-1,ClearMode,Pre-Sequence

# Preset: Post-Sequence
ConfigGroup,Clearing,Post-Sequence,Camera-1,ClearMode,Post-Sequence

# Preset: Pre-Exposure and Post-Sequence
ConfigGroup,Clearing,Pre-Exposure and Post-Sequence,Camera-1,ClearMode,Pre-Exposure and Post-Sequence

# Preset: Pre-Exposure
ConfigGroup,Clearing,Pre-Exposure,Camera-1,ClearMode,Pre-Exposure

# Preset: Pre- and Post-Sequence
ConfigGroup,Clearing,Pre- and Post-Sequence,Camera-1,ClearMode,Pre- and Post-Sequence



# PixelSize settings

