# Generated by Configurator on Mon Aug 07 15:41:39 PDT 2017

# Reset
Property,Core,Initialize,0

# Devices
Device,COM9,SerialManager,COM9
Device,COM1,SerialManager,COM1
Device,COM6,SerialManager,COM6
Device,COM10,SerialManager,COM10
Device,COM7,SerialManager,COM7
Device,COM3,SerialManager,COM3
Device,COM4,SerialManager,COM4
Device,EMCCD,Andor,Andor
Device,SD-Zyla,AndorSDK3,Andor sCMOS Camera
Device,WF-Zyla,AndorSDK3,Andor sCMOS Camera
Device,TIScope,NikonTI,TIScope
Device,TINosePiece,NikonTI,TINosePiece
Device,TIFilterBlock1,NikonTI,TIFilterBlock1
Device,TIFilterBlock2,NikonTI,TIFilterBlock2
Device,TILightPath,NikonTI,TILightPath
Device,TIZDrive,NikonTI,TIZDrive
Device,TIPFSOffset,NikonTI,TIPFSOffset
Device,TIPFSStatus,NikonTI,TIPFSStatus
Device,CSUW1-Hub,CSUW1,CSUW1-Hub
Device,Side Filter Wheel,CSUW1,CSUW1-Filter Wheel
Device,Back Filter Wheel,CSUW1,CSUW1-Filter Wheel
Device,CSUW1-Dichroic Mirror,CSUW1,CSUW1-Dichroic Mirror
Device,CSUW1-Shutter,CSUW1,CSUW1-Shutter
Device,CSUW1-Drive Speed,CSUW1,CSUW1-Drive Speed
Device,CSUW1-Bright Field,CSUW1,CSUW1-Bright Field
Device,CSUW1-Port,CSUW1,CSUW1-Port
Device,CSUW1-Aperture,CSUW1,CSUW1-Aperture
Device,CSUW1-Magnifier 2,CSUW1,CSUW1-Magnifier
Device,LMM5-Hub,SpectralLMM5,LMM5-Hub
Device,LMM5-Shutter,SpectralLMM5,LMM5-Shutter
Device,Wheel-A,SutterLambda,Wheel-A
Device,Spectra,LumencorSpectra,Spectra
Device,XYStage,ASIStage,XYStage
Device,ZStage,ASIStage,ZStage
Device,Arduino-Hub,Arduino,Arduino-Hub
Device,TubeLens,Arduino,Arduino-Input
Device,BF-Switch,Arduino,Arduino-Switch
Device,BF-Shutter,Arduino,Arduino-Shutter
Device,ESioController,ESIOImagingControllers,ESioController
Device,ESIOSwitch,ESIOImagingControllers,Switch
Device,ESIOShutter,ESIOImagingControllers,Shutter

# Pre-init settings for devices
Property,COM9,AnswerTimeout,500.0000
Property,COM9,BaudRate,128000
Property,COM9,DelayBetweenCharsMs,0.0000
Property,COM9,Handshaking,Off
Property,COM9,Parity,None
Property,COM9,StopBits,1
Property,COM9,Verbose,1
Property,COM1,AnswerTimeout,500.0000
Property,COM1,BaudRate,19200
Property,COM1,DelayBetweenCharsMs,0.0000
Property,COM1,Handshaking,Off
Property,COM1,Parity,None
Property,COM1,StopBits,1
Property,COM1,Verbose,1
Property,COM6,AnswerTimeout,500.0000
Property,COM6,BaudRate,9600
Property,COM6,DelayBetweenCharsMs,0.0000
Property,COM6,Handshaking,Off
Property,COM6,Parity,None
Property,COM6,StopBits,1
Property,COM6,Verbose,1
Property,COM10,AnswerTimeout,500.0000
Property,COM10,BaudRate,115200
Property,COM10,DelayBetweenCharsMs,0.0000
Property,COM10,Handshaking,Off
Property,COM10,Parity,None
Property,COM10,StopBits,1
Property,COM10,Verbose,1
Property,COM7,AnswerTimeout,500.0000
Property,COM7,BaudRate,57600
Property,COM7,DelayBetweenCharsMs,0.0000
Property,COM7,Handshaking,Off
Property,COM7,Parity,None
Property,COM7,StopBits,1
Property,COM7,Verbose,0
Property,COM3,AnswerTimeout,500.0000
Property,COM3,BaudRate,115200
Property,COM3,DelayBetweenCharsMs,0.0000
Property,COM3,Handshaking,Off
Property,COM3,Parity,None
Property,COM3,StopBits,1
Property,COM3,Verbose,1
Property,COM4,AnswerTimeout,500.0000
Property,COM4,BaudRate,57600
Property,COM4,DelayBetweenCharsMs,0.0000
Property,COM4,Handshaking,Off
Property,COM4,Parity,None
Property,COM4,StopBits,1
Property,COM4,Verbose,1
Property,EMCCD,Camera,| iXon Ultra | DU888_BV | 9602 |
Property,CSUW1-Hub,Port,COM10
Property,Side Filter Wheel,WheelNumber,1
Property,Back Filter Wheel,WheelNumber,2
Property,CSUW1-Magnifier 2,MagnifierNumber,2
Property,LMM5-Hub,Port,COM1
Property,Wheel-A,Port,COM9
Property,Wheel-A,Timeout(ms),500
Property,Spectra,Port,COM6
Property,Spectra,SetLE_Type,Spectra
Property,XYStage,Port,COM3
Property,ZStage,Axis,Z
Property,ZStage,Port,COM3
Property,Arduino-Hub,Logic,Normal
Property,Arduino-Hub,Port,COM7
Property,TubeLens,Pin,0
Property,TubeLens,Pull-Up-Resistor,On
Property,ESioController,Port,COM4

# Pre-init settings for COM ports

# Hub (parent) references
Parent,TINosePiece,TIScope
Parent,TIFilterBlock1,TIScope
Parent,TIFilterBlock2,TIScope
Parent,TILightPath,TIScope
Parent,TIZDrive,TIScope
Parent,TIPFSOffset,TIScope
Parent,TIPFSStatus,TIScope
Parent,TubeLens,Arduino-Hub
Parent,BF-Switch,Arduino-Hub
Parent,BF-Shutter,Arduino-Hub
Parent,ESIOSwitch,ESioController
Parent,ESIOShutter,ESioController

# Initialize
Property,Core,Initialize,1

# Delays
Delay,Side Filter Wheel,25.0
Delay,Back Filter Wheel,25.0

# Focus directions

# Roles
Property,Core,Camera,SD-Zyla
Property,Core,Shutter,LMM5-Shutter
Property,Core,Focus,TIZDrive
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels
# TINosePiece
Label,TINosePiece,5,6-Plan Apo VC 100x NA 1.40 Oil
Label,TINosePiece,4,5-Plan Apo 60x NA 1.27 WI
Label,TINosePiece,3,4-Plan Apo 40x NA 1.15 WI
Label,TINosePiece,2,3-Plan Apo 4x NA 0.20 Dry
Label,TINosePiece,1,2-Plan Apo 20x NA 0.75 Dry
Label,TINosePiece,0,1-Plan Apo 10x NA 0.45 Dry
# TIFilterBlock1
Label,TIFilterBlock1,5,6------
Label,TIFilterBlock1,4,5-PB/PA
Label,TIFilterBlock1,3,4------
Label,TIFilterBlock1,2,3------
Label,TIFilterBlock1,1,2------
Label,TIFilterBlock1,0,1------
# TIFilterBlock2
Label,TIFilterBlock2,5,6-ANALY
Label,TIFilterBlock2,4,5------
Label,TIFilterBlock2,3,4------
Label,TIFilterBlock2,2,3------
Label,TIFilterBlock2,1,2-C/YFP
Label,TIFilterBlock2,0,1-SEDAT
# TILightPath
Label,TILightPath,3,4-Left80
Label,TILightPath,2,3-Right100
Label,TILightPath,1,2-Left100
Label,TILightPath,0,1-Eye100
# Side Filter Wheel
Label,Side Filter Wheel,9,Blocked
Label,Side Filter Wheel,8,Blocked
Label,Side Filter Wheel,7,Blocked
Label,Side Filter Wheel,6,Empty
Label,Side Filter Wheel,5,405/488/561/635
Label,Side Filter Wheel,4,700/75
Label,Side Filter Wheel,3,620/60
Label,Side Filter Wheel,2,600/50
Label,Side Filter Wheel,1,525/50
Label,Side Filter Wheel,0,450/50
# Back Filter Wheel
Label,Back Filter Wheel,9,Blocked
Label,Back Filter Wheel,8,Blocked
Label,Back Filter Wheel,7,Blocked
Label,Back Filter Wheel,6,Empty
Label,Back Filter Wheel,5,405/488/561/635
Label,Back Filter Wheel,4,700/75
Label,Back Filter Wheel,3,620/60
Label,Back Filter Wheel,2,600/50
Label,Back Filter Wheel,1,525/50
Label,Back Filter Wheel,0,450/50
# CSUW1-Dichroic Mirror
Label,CSUW1-Dichroic Mirror,2,Empty
Label,CSUW1-Dichroic Mirror,1,405/445/514/785
Label,CSUW1-Dichroic Mirror,0,405/488/561/640
# CSUW1-Bright Field
Label,CSUW1-Bright Field,1,Bright Field
Label,CSUW1-Bright Field,0,Confocal
# CSUW1-Port
Label,CSUW1-Port,2,empty
Label,CSUW1-Port,1,Back Camera
Label,CSUW1-Port,0,Side Camera
# CSUW1-Magnifier 2
Label,CSUW1-Magnifier 2,0,State-0
# BF-Switch
Label,BF-Switch,63,63
Label,BF-Switch,62,62
Label,BF-Switch,61,61
Label,BF-Switch,60,60
Label,BF-Switch,59,59
Label,BF-Switch,58,58
Label,BF-Switch,57,57
Label,BF-Switch,56,56
Label,BF-Switch,55,55
Label,BF-Switch,54,54
Label,BF-Switch,53,53
Label,BF-Switch,52,52
Label,BF-Switch,51,51
Label,BF-Switch,50,50
Label,BF-Switch,49,49
Label,BF-Switch,48,48
Label,BF-Switch,47,47
Label,BF-Switch,46,46
Label,BF-Switch,45,45
Label,BF-Switch,44,44
Label,BF-Switch,43,43
Label,BF-Switch,42,42
Label,BF-Switch,41,41
Label,BF-Switch,40,40
Label,BF-Switch,39,39
Label,BF-Switch,38,38
Label,BF-Switch,37,37
Label,BF-Switch,36,36
Label,BF-Switch,35,35
Label,BF-Switch,34,34
Label,BF-Switch,33,33
Label,BF-Switch,32,Out5
Label,BF-Switch,31,31
Label,BF-Switch,30,30
Label,BF-Switch,29,29
Label,BF-Switch,28,28
Label,BF-Switch,27,27
Label,BF-Switch,26,26
Label,BF-Switch,25,25
Label,BF-Switch,24,24
Label,BF-Switch,23,23
Label,BF-Switch,22,22
Label,BF-Switch,21,21
Label,BF-Switch,20,20
Label,BF-Switch,19,19
Label,BF-Switch,18,18
Label,BF-Switch,17,17
Label,BF-Switch,16,BF
Label,BF-Switch,15,15
Label,BF-Switch,14,14
Label,BF-Switch,13,13
Label,BF-Switch,12,12
Label,BF-Switch,11,11
Label,BF-Switch,10,10
Label,BF-Switch,9,9
Label,BF-Switch,8,640 nm
Label,BF-Switch,7,7
Label,BF-Switch,6,6
Label,BF-Switch,5,5
Label,BF-Switch,4,561 nm
Label,BF-Switch,3,3
Label,BF-Switch,2,488 nm
Label,BF-Switch,1,405 nm
Label,BF-Switch,0,0
# ESIOSwitch
Label,ESIOSwitch,32,Cy5
Label,ESIOSwitch,31,31
Label,ESIOSwitch,30,30
Label,ESIOSwitch,29,29
Label,ESIOSwitch,28,28
Label,ESIOSwitch,27,27
Label,ESIOSwitch,26,26
Label,ESIOSwitch,25,25
Label,ESIOSwitch,24,24
Label,ESIOSwitch,23,23
Label,ESIOSwitch,22,22
Label,ESIOSwitch,21,21
Label,ESIOSwitch,20,20
Label,ESIOSwitch,19,19
Label,ESIOSwitch,18,18
Label,ESIOSwitch,17,17
Label,ESIOSwitch,16,Cy3
Label,ESIOSwitch,15,15
Label,ESIOSwitch,14,14
Label,ESIOSwitch,13,13
Label,ESIOSwitch,12,12
Label,ESIOSwitch,11,11
Label,ESIOSwitch,10,10
Label,ESIOSwitch,9,9
Label,ESIOSwitch,8,YFP
Label,ESIOSwitch,7,7
Label,ESIOSwitch,6,6
Label,ESIOSwitch,5,5
Label,ESIOSwitch,4,FITC
Label,ESIOSwitch,3,3
Label,ESIOSwitch,2,CFP
Label,ESIOSwitch,1,DAPI
Label,ESIOSwitch,0,0

# Configuration presets
# Group: Confocal Channel
# Preset: Fast-GFP
ConfigGroup,Confocal Channel,Fast-GFP,Side Filter Wheel,Label,405/488/561/635
ConfigGroup,Confocal Channel,Fast-GFP,Back Filter Wheel,Label,405/488/561/635
ConfigGroup,Confocal Channel,Fast-GFP,BF-Switch,Label,488 nm
ConfigGroup,Confocal Channel,Fast-GFP,Core,Shutter,BF-Shutter
ConfigGroup,Confocal Channel,Fast-GFP,TIFilterBlock2,Label,6-ANALY

# Preset: Cy5
ConfigGroup,Confocal Channel,Cy5,Side Filter Wheel,Label,700/75
ConfigGroup,Confocal Channel,Cy5,Back Filter Wheel,Label,700/75
ConfigGroup,Confocal Channel,Cy5,Core,Shutter,BF-Shutter
ConfigGroup,Confocal Channel,Cy5,BF-Switch,Label,640 nm
ConfigGroup,Confocal Channel,Cy5,TIFilterBlock2,Label,5------

# Preset: Fast-DAPI
ConfigGroup,Confocal Channel,Fast-DAPI,Side Filter Wheel,Label,405/488/561/635
ConfigGroup,Confocal Channel,Fast-DAPI,Back Filter Wheel,Label,405/488/561/635
ConfigGroup,Confocal Channel,Fast-DAPI,BF-Switch,Label,405 nm
ConfigGroup,Confocal Channel,Fast-DAPI,Core,Shutter,BF-Shutter
ConfigGroup,Confocal Channel,Fast-DAPI,TIFilterBlock2,Label,5------

# Preset: Fast-BF
ConfigGroup,Confocal Channel,Fast-BF,Side Filter Wheel,Label,405/488/561/635
ConfigGroup,Confocal Channel,Fast-BF,Back Filter Wheel,Label,405/488/561/635
ConfigGroup,Confocal Channel,Fast-BF,BF-Switch,Label,BF
ConfigGroup,Confocal Channel,Fast-BF,Core,Shutter,BF-Shutter
ConfigGroup,Confocal Channel,Fast-BF,TIFilterBlock2,Label,5------

# Preset: DAPI
ConfigGroup,Confocal Channel,DAPI,Side Filter Wheel,Label,450/50
ConfigGroup,Confocal Channel,DAPI,Back Filter Wheel,Label,450/50
ConfigGroup,Confocal Channel,DAPI,Core,Shutter,BF-Shutter
ConfigGroup,Confocal Channel,DAPI,BF-Switch,Label,405 nm
ConfigGroup,Confocal Channel,DAPI,TIFilterBlock2,Label,5------

# Preset: DIC
ConfigGroup,Confocal Channel,DIC,TIFilterBlock2,Label,6-ANALY
ConfigGroup,Confocal Channel,DIC,Side Filter Wheel,Label,Empty
ConfigGroup,Confocal Channel,DIC,Back Filter Wheel,Label,Empty
ConfigGroup,Confocal Channel,DIC,BF-Switch,Label,BF
ConfigGroup,Confocal Channel,DIC,Core,Shutter,BF-Shutter

# Preset: dKeima
ConfigGroup,Confocal Channel,dKeima,Side Filter Wheel,Label,620/60
ConfigGroup,Confocal Channel,dKeima,Back Filter Wheel,Label,620/60
ConfigGroup,Confocal Channel,dKeima,BF-Switch,Label,405 nm
ConfigGroup,Confocal Channel,dKeima,Core,Shutter,BF-Shutter
ConfigGroup,Confocal Channel,dKeima,TIFilterBlock2,Label,5------

# Preset: Fast-RFP
ConfigGroup,Confocal Channel,Fast-RFP,Side Filter Wheel,Label,405/488/561/635
ConfigGroup,Confocal Channel,Fast-RFP,Back Filter Wheel,Label,405/488/561/635
ConfigGroup,Confocal Channel,Fast-RFP,BF-Switch,Label,561 nm
ConfigGroup,Confocal Channel,Fast-RFP,Core,Shutter,BF-Shutter
ConfigGroup,Confocal Channel,Fast-RFP,TIFilterBlock2,Label,5------

# Preset: GFP
ConfigGroup,Confocal Channel,GFP,Side Filter Wheel,Label,525/50
ConfigGroup,Confocal Channel,GFP,Back Filter Wheel,Label,525/50
ConfigGroup,Confocal Channel,GFP,Core,Shutter,BF-Shutter
ConfigGroup,Confocal Channel,GFP,BF-Switch,Label,488 nm
ConfigGroup,Confocal Channel,GFP,TIFilterBlock2,Label,5------

# Preset: Fast-Cy5
ConfigGroup,Confocal Channel,Fast-Cy5,Side Filter Wheel,Label,405/488/561/635
ConfigGroup,Confocal Channel,Fast-Cy5,Back Filter Wheel,Label,405/488/561/635
ConfigGroup,Confocal Channel,Fast-Cy5,BF-Switch,Label,640 nm
ConfigGroup,Confocal Channel,Fast-Cy5,Core,Shutter,BF-Shutter
ConfigGroup,Confocal Channel,Fast-Cy5,TIFilterBlock2,Label,5------

# Preset: RFP
ConfigGroup,Confocal Channel,RFP,Side Filter Wheel,Label,620/60
ConfigGroup,Confocal Channel,RFP,Back Filter Wheel,Label,620/60
ConfigGroup,Confocal Channel,RFP,Core,Shutter,BF-Shutter
ConfigGroup,Confocal Channel,RFP,BF-Switch,Label,561 nm
ConfigGroup,Confocal Channel,RFP,TIFilterBlock2,Label,5------

# Preset: BF
ConfigGroup,Confocal Channel,BF,Side Filter Wheel,Label,Empty
ConfigGroup,Confocal Channel,BF,Back Filter Wheel,Label,Empty
ConfigGroup,Confocal Channel,BF,BF-Switch,Label,BF
ConfigGroup,Confocal Channel,BF,Core,Shutter,BF-Shutter
ConfigGroup,Confocal Channel,BF,TIFilterBlock2,Label,5------


# Group: 640nm Laser
# Preset: NewPreset
ConfigGroup,640nm Laser,NewPreset,LMM5-Hub,Transmission (%) 640nm-4,100.0000


# Group: 405nm Laser
# Preset: NewPreset
ConfigGroup,405nm Laser,NewPreset,LMM5-Hub,Transmission (%) 405nm-1,100.0000


# Group: Zyla Shutter
# Preset: Rolling
ConfigGroup,Zyla Shutter,Rolling,SD-Zyla,AuxiliaryOutSource (TTL I/O),FireAny

# Preset: Pseudo Global
ConfigGroup,Zyla Shutter,Pseudo Global,SD-Zyla,AuxiliaryOutSource (TTL I/O),FireAll


# Group: System
# Preset: Startup
ConfigGroup,System,Startup,CSUW1-Dichroic Mirror,Label,405/488/561/640
ConfigGroup,System,Startup,CSUW1-Shutter,State,Open
ConfigGroup,System,Startup,CSUW1-Drive Speed,Run,On
ConfigGroup,System,Startup,CSUW1-Drive Speed,State,4000
ConfigGroup,System,Startup,CSUW1-Bright Field,BrightFieldPort,Confocal
ConfigGroup,System,Startup,CSUW1-Aperture,State,7
ConfigGroup,System,Startup,ZStage,Use Sequence,Yes
ConfigGroup,System,Startup,Side Filter Wheel,Speed,2
ConfigGroup,System,Startup,Back Filter Wheel,Speed,2
ConfigGroup,System,Startup,ESIOSwitch,Blanking Mode,Off
ConfigGroup,System,Startup,ESIOSwitch,Sequence,Off
ConfigGroup,System,Startup,Core,Focus,ZStage
ConfigGroup,System,Startup,EMCCD,FrameTransfer,On
ConfigGroup,System,Startup,EMCCD,Gain,200
ConfigGroup,System,Startup,EMCCD,ReadoutMode,30.000 MHz
ConfigGroup,System,Startup,BF-Switch,Blank On,Low
ConfigGroup,System,Startup,BF-Switch,Blanking Mode,On
ConfigGroup,System,Startup,BF-Switch,Sequence,On
ConfigGroup,System,Startup,SD-Zyla,TransposeMirrorX,1
ConfigGroup,System,Startup,EMCCD,TransposeMirrorX,1
ConfigGroup,System,Startup,EMCCD,TransposeMirrorY,1
ConfigGroup,System,Startup,EMCCD,Pre-Amp-Gain,Gain 2
ConfigGroup,System,Startup,SD-Zyla,AuxiliaryOutSource (TTL I/O),FireAny
ConfigGroup,System,Startup,SD-Zyla,PixelReadoutRate,200 MHz - lowest noise
ConfigGroup,System,Startup,SD-Zyla,Sensitivity/DynamicRange,16-bit (low noise & high well capacity)
ConfigGroup,System,Startup,TIFilterBlock1,Label,6------
ConfigGroup,System,Startup,TIFilterBlock2,Label,5------


# Group: Zyla Speed
# Preset: 540 MHz - fastest readout
ConfigGroup,Zyla Speed,540 MHz - fastest readout,SD-Zyla,PixelReadoutRate,540 MHz - fastest readout

# Preset: 200 MHz - lowest noise
ConfigGroup,Zyla Speed,200 MHz - lowest noise,SD-Zyla,PixelReadoutRate,200 MHz - lowest noise


# Group: EM Gain
# Preset: NewPreset
ConfigGroup,EM Gain,NewPreset,EMCCD,Gain,2


# Group: Zyla Bitdepth
# Preset: 12-bit (low noise)
ConfigGroup,Zyla Bitdepth,12-bit (low noise),SD-Zyla,Sensitivity/DynamicRange,12-bit (low noise)

# Preset: 16-bit (low noise & high well capacity)
ConfigGroup,Zyla Bitdepth,16-bit (low noise & high well capacity),SD-Zyla,Sensitivity/DynamicRange,16-bit (low noise & high well capacity)

# Preset: 12-bit (high well capacity)
ConfigGroup,Zyla Bitdepth,12-bit (high well capacity),SD-Zyla,Sensitivity/DynamicRange,12-bit (high well capacity)


# Group: CSU-W1 Camera Port
# Preset: EMCCD large FOV (back)
ConfigGroup,CSU-W1 Camera Port,EMCCD large FOV (back),CSUW1-Port,Label,Back Camera
ConfigGroup,CSU-W1 Camera Port,EMCCD large FOV (back),CSUW1-Magnifier 2,Label,State-0
ConfigGroup,CSU-W1 Camera Port,EMCCD large FOV (back),Core,Camera,EMCCD
ConfigGroup,CSU-W1 Camera Port,EMCCD large FOV (back),CSUW1-Aperture,State,7

# Preset: EMCCD high resolution
ConfigGroup,CSU-W1 Camera Port,EMCCD high resolution,CSUW1-Port,Label,Back Camera
ConfigGroup,CSU-W1 Camera Port,EMCCD high resolution,CSUW1-Magnifier 2,Label,Magnifier-2
ConfigGroup,CSU-W1 Camera Port,EMCCD high resolution,Core,Camera,EMCCD
ConfigGroup,CSU-W1 Camera Port,EMCCD high resolution,CSUW1-Aperture,State,2

# Preset: Zyla sCMOS
ConfigGroup,CSU-W1 Camera Port,Zyla sCMOS,CSUW1-Port,Label,Side Camera
ConfigGroup,CSU-W1 Camera Port,Zyla sCMOS,CSUW1-Magnifier 2,Label,State-0
ConfigGroup,CSU-W1 Camera Port,Zyla sCMOS,Core,Camera,SD-Zyla
ConfigGroup,CSU-W1 Camera Port,Zyla sCMOS,CSUW1-Aperture,State,7


# Group: 561nm Laser
# Preset: NewPreset
ConfigGroup,561nm Laser,NewPreset,LMM5-Hub,Transmission (%) 561nm-3,100.0000


# Group: Eyepiece Channel
# Preset: FITC
ConfigGroup,Eyepiece Channel,FITC,ESIOSwitch,Label,FITC

# Preset: DAPI
ConfigGroup,Eyepiece Channel,DAPI,ESIOSwitch,Label,DAPI

# Preset: Cy5
ConfigGroup,Eyepiece Channel,Cy5,ESIOSwitch,Label,Cy5

# Preset: Cy3
ConfigGroup,Eyepiece Channel,Cy3,ESIOSwitch,Label,Cy3


# Group: Mode
# Preset: Eyepiece
ConfigGroup,Mode,Eyepiece,TIFilterBlock1,Label,6------
ConfigGroup,Mode,Eyepiece,TIFilterBlock2,Label,1-SEDAT
ConfigGroup,Mode,Eyepiece,TILightPath,Label,1-Eye100
ConfigGroup,Mode,Eyepiece,Core,Shutter,ESIOShutter

# Preset: Confocal
ConfigGroup,Mode,Confocal,TIFilterBlock1,Label,6------
ConfigGroup,Mode,Confocal,TIFilterBlock2,Label,5------
ConfigGroup,Mode,Confocal,TILightPath,Label,2-Left100
ConfigGroup,Mode,Confocal,Core,Shutter,BF-Shutter


# Group: Focus Drive
# Preset: TIPFSOffset
ConfigGroup,Focus Drive,TIPFSOffset,Core,Focus,TIPFSOffset

# Preset: ZStage
ConfigGroup,Focus Drive,ZStage,Core,Focus,ZStage

# Preset: TIZDrive
ConfigGroup,Focus Drive,TIZDrive,Core,Focus,TIZDrive


# Group: 488nm Laser
# Preset: NewPreset
ConfigGroup,488nm Laser,NewPreset,LMM5-Hub,Transmission (%) 488nm-2,100.0000



# PixelSize settings
# Resolution preset: 40x_1.5x_EMCCD_highres
ConfigPixelSize,40x_1.5x_EMCCD_highres,TINosePiece,Label,4-Plan Apo 40x NA 1.15 WI
PixelSize_um,40x_1.5x_EMCCD_highres,0.114
ConfigPixelSize,40x_1.5x_EMCCD_highres,CSUW1-Port,Label,Back Camera
PixelSize_um,40x_1.5x_EMCCD_highres,0.114
ConfigPixelSize,40x_1.5x_EMCCD_highres,CSUW1-Magnifier 2,Label,Magnifier-2
PixelSize_um,40x_1.5x_EMCCD_highres,0.114
ConfigPixelSize,40x_1.5x_EMCCD_highres,TubeLens,DigitalInput,1
PixelSize_um,40x_1.5x_EMCCD_highres,0.114

# Resolution preset: 10x_1x_EMCCD_highres
ConfigPixelSize,10x_1x_EMCCD_highres,TINosePiece,Label,1-Plan Apo 10x NA 0.45 Dry
PixelSize_um,10x_1x_EMCCD_highres,0.6671
ConfigPixelSize,10x_1x_EMCCD_highres,CSUW1-Port,Label,Back Camera
PixelSize_um,10x_1x_EMCCD_highres,0.6671
ConfigPixelSize,10x_1x_EMCCD_highres,CSUW1-Magnifier 2,Label,Magnifier-2
PixelSize_um,10x_1x_EMCCD_highres,0.6671
ConfigPixelSize,10x_1x_EMCCD_highres,TubeLens,DigitalInput,0
PixelSize_um,10x_1x_EMCCD_highres,0.6671

# Resolution preset: 10x_1x_confocal
ConfigPixelSize,10x_1x_confocal,TINosePiece,Label,1-Plan Apo 10x NA 0.45 Dry
PixelSize_um,10x_1x_confocal,0.6493
ConfigPixelSize,10x_1x_confocal,CSUW1-Port,Label,Side Camera
PixelSize_um,10x_1x_confocal,0.6493
ConfigPixelSize,10x_1x_confocal,CSUW1-Magnifier 2,Label,State-0
PixelSize_um,10x_1x_confocal,0.6493
ConfigPixelSize,10x_1x_confocal,TubeLens,DigitalInput,0
PixelSize_um,10x_1x_confocal,0.6493

# Resolution preset: 10x_1.5x_EMCCD_highres
ConfigPixelSize,10x_1.5x_EMCCD_highres,TINosePiece,Label,1-Plan Apo 10x NA 0.45 Dry
PixelSize_um,10x_1.5x_EMCCD_highres,0.4491
ConfigPixelSize,10x_1.5x_EMCCD_highres,CSUW1-Port,Label,Back Camera
PixelSize_um,10x_1.5x_EMCCD_highres,0.4491
ConfigPixelSize,10x_1.5x_EMCCD_highres,CSUW1-Magnifier 2,Label,Magnifier-2
PixelSize_um,10x_1.5x_EMCCD_highres,0.4491
ConfigPixelSize,10x_1.5x_EMCCD_highres,TubeLens,DigitalInput,1
PixelSize_um,10x_1.5x_EMCCD_highres,0.4491

# Resolution preset: 60x_1.5x_EMCCD_highres
ConfigPixelSize,60x_1.5x_EMCCD_highres,TINosePiece,Label,5-Plan Apo 60x NA 1.27 WI
PixelSize_um,60x_1.5x_EMCCD_highres,0.0754
ConfigPixelSize,60x_1.5x_EMCCD_highres,CSUW1-Port,Label,Back Camera
PixelSize_um,60x_1.5x_EMCCD_highres,0.0754
ConfigPixelSize,60x_1.5x_EMCCD_highres,CSUW1-Magnifier 2,Label,Magnifier-2
PixelSize_um,60x_1.5x_EMCCD_highres,0.0754
ConfigPixelSize,60x_1.5x_EMCCD_highres,TubeLens,DigitalInput,1
PixelSize_um,60x_1.5x_EMCCD_highres,0.0754

# Resolution preset: 100x_1.5x_confocal
ConfigPixelSize,100x_1.5x_confocal,TINosePiece,Label,6-Plan Apo VC 100x NA 1.40 Oil
PixelSize_um,100x_1.5x_confocal,0.044
ConfigPixelSize,100x_1.5x_confocal,CSUW1-Port,Label,Side Camera
PixelSize_um,100x_1.5x_confocal,0.044
ConfigPixelSize,100x_1.5x_confocal,CSUW1-Magnifier 2,Label,State-0
PixelSize_um,100x_1.5x_confocal,0.044
ConfigPixelSize,100x_1.5x_confocal,TubeLens,DigitalInput,1
PixelSize_um,100x_1.5x_confocal,0.044

# Resolution preset: 40x_1.5x_confocal
ConfigPixelSize,40x_1.5x_confocal,TINosePiece,Label,4-Plan Apo 40x NA 1.15 WI
PixelSize_um,40x_1.5x_confocal,0.1119
ConfigPixelSize,40x_1.5x_confocal,CSUW1-Port,Label,Side Camera
PixelSize_um,40x_1.5x_confocal,0.1119
ConfigPixelSize,40x_1.5x_confocal,CSUW1-Magnifier 2,Label,State-0
PixelSize_um,40x_1.5x_confocal,0.1119
ConfigPixelSize,40x_1.5x_confocal,TubeLens,DigitalInput,1
PixelSize_um,40x_1.5x_confocal,0.1119

# Resolution preset: 100x_1x_confocal
ConfigPixelSize,100x_1x_confocal,TINosePiece,Label,6-Plan Apo VC 100x NA 1.40 Oil
PixelSize_um,100x_1x_confocal,0.0646
ConfigPixelSize,100x_1x_confocal,TubeLens,DigitalInput,0
PixelSize_um,100x_1x_confocal,0.0646
ConfigPixelSize,100x_1x_confocal,CSUW1-Port,Label,Side Camera
PixelSize_um,100x_1x_confocal,0.0646
ConfigPixelSize,100x_1x_confocal,CSUW1-Magnifier 2,Label,State-0
PixelSize_um,100x_1x_confocal,0.0646

# Resolution preset: 40x_1x_EMCCD_largeFOV
ConfigPixelSize,40x_1x_EMCCD_largeFOV,TINosePiece,Label,4-Plan Apo 40x NA 1.15 WI
PixelSize_um,40x_1x_EMCCD_largeFOV,0.3286
ConfigPixelSize,40x_1x_EMCCD_largeFOV,CSUW1-Port,Label,Back Camera
PixelSize_um,40x_1x_EMCCD_largeFOV,0.3286
ConfigPixelSize,40x_1x_EMCCD_largeFOV,CSUW1-Magnifier 2,Label,State-0
PixelSize_um,40x_1x_EMCCD_largeFOV,0.3286
ConfigPixelSize,40x_1x_EMCCD_largeFOV,TubeLens,DigitalInput,0
PixelSize_um,40x_1x_EMCCD_largeFOV,0.3286

# Resolution preset: 10x_1.5x_confocal
ConfigPixelSize,10x_1.5x_confocal,TINosePiece,Label,1-Plan Apo 10x NA 0.45 Dry
PixelSize_um,10x_1.5x_confocal,0.4421
ConfigPixelSize,10x_1.5x_confocal,CSUW1-Port,Label,Side Camera
PixelSize_um,10x_1.5x_confocal,0.4421
ConfigPixelSize,10x_1.5x_confocal,CSUW1-Magnifier 2,Label,State-0
PixelSize_um,10x_1.5x_confocal,0.4421
ConfigPixelSize,10x_1.5x_confocal,TubeLens,DigitalInput,1
PixelSize_um,10x_1.5x_confocal,0.4421

# Resolution preset: 60x_1x_confocal
ConfigPixelSize,60x_1x_confocal,TINosePiece,Label,5-Plan Apo 60x NA 1.27 WI
PixelSize_um,60x_1x_confocal,0.1083
ConfigPixelSize,60x_1x_confocal,TubeLens,DigitalInput,0
PixelSize_um,60x_1x_confocal,0.1083
ConfigPixelSize,60x_1x_confocal,CSUW1-Port,Label,Side Camera
PixelSize_um,60x_1x_confocal,0.1083
ConfigPixelSize,60x_1x_confocal,CSUW1-Magnifier 2,Label,State-0
PixelSize_um,60x_1x_confocal,0.1083

# Resolution preset: 4x_1.5x_confocal
ConfigPixelSize,4x_1.5x_confocal,TINosePiece,Label,3-Plan Apo 4x NA 0.20 Dry
PixelSize_um,4x_1.5x_confocal,1.0999
ConfigPixelSize,4x_1.5x_confocal,CSUW1-Port,Label,Side Camera
PixelSize_um,4x_1.5x_confocal,1.0999
ConfigPixelSize,4x_1.5x_confocal,CSUW1-Magnifier 2,Label,State-0
PixelSize_um,4x_1.5x_confocal,1.0999
ConfigPixelSize,4x_1.5x_confocal,TubeLens,DigitalInput,1
PixelSize_um,4x_1.5x_confocal,1.0999

# Resolution preset: 20x_1.5x_EMCCD_highres
ConfigPixelSize,20x_1.5x_EMCCD_highres,TINosePiece,Label,2-Plan Apo 20x NA 0.75 Dry
PixelSize_um,20x_1.5x_EMCCD_highres,0.1947
ConfigPixelSize,20x_1.5x_EMCCD_highres,CSUW1-Port,Label,Back Camera
PixelSize_um,20x_1.5x_EMCCD_highres,0.1947
ConfigPixelSize,20x_1.5x_EMCCD_highres,CSUW1-Magnifier 2,Label,Magnifier-2
PixelSize_um,20x_1.5x_EMCCD_highres,0.1947
ConfigPixelSize,20x_1.5x_EMCCD_highres,TubeLens,DigitalInput,1
PixelSize_um,20x_1.5x_EMCCD_highres,0.1947

# Resolution preset: 100x_1.5x_EMCCD_highres
ConfigPixelSize,100x_1.5x_EMCCD_highres,TINosePiece,Label,6-Plan Apo VC 100x NA 1.40 Oil
PixelSize_um,100x_1.5x_EMCCD_highres,0.0449
ConfigPixelSize,100x_1.5x_EMCCD_highres,CSUW1-Port,Label,Back Camera
PixelSize_um,100x_1.5x_EMCCD_highres,0.0449
ConfigPixelSize,100x_1.5x_EMCCD_highres,CSUW1-Magnifier 2,Label,Magnifier-2
PixelSize_um,100x_1.5x_EMCCD_highres,0.0449
ConfigPixelSize,100x_1.5x_EMCCD_highres,TubeLens,DigitalInput,1
PixelSize_um,100x_1.5x_EMCCD_highres,0.0449

# Resolution preset: 60x_1x_EMCCD_highres
ConfigPixelSize,60x_1x_EMCCD_highres,TINosePiece,Label,5-Plan Apo 60x NA 1.27 WI
PixelSize_um,60x_1x_EMCCD_highres,0.1119
ConfigPixelSize,60x_1x_EMCCD_highres,CSUW1-Port,Label,Back Camera
PixelSize_um,60x_1x_EMCCD_highres,0.1119
ConfigPixelSize,60x_1x_EMCCD_highres,CSUW1-Magnifier 2,Label,Magnifier-2
PixelSize_um,60x_1x_EMCCD_highres,0.1119
ConfigPixelSize,60x_1x_EMCCD_highres,TubeLens,DigitalInput,0
PixelSize_um,60x_1x_EMCCD_highres,0.1119

# Resolution preset: 60x_1.5x_confocal
ConfigPixelSize,60x_1.5x_confocal,TINosePiece,Label,5-Plan Apo 60x NA 1.27 WI
PixelSize_um,60x_1.5x_confocal,0.0739
ConfigPixelSize,60x_1.5x_confocal,CSUW1-Port,Label,Side Camera
PixelSize_um,60x_1.5x_confocal,0.0739
ConfigPixelSize,60x_1.5x_confocal,CSUW1-Magnifier 2,Label,State-0
PixelSize_um,60x_1.5x_confocal,0.0739
ConfigPixelSize,60x_1.5x_confocal,TubeLens,DigitalInput,1
PixelSize_um,60x_1.5x_confocal,0.0739

# Resolution preset: 60x_1x_EMCCD_largeFOV
ConfigPixelSize,60x_1x_EMCCD_largeFOV,TINosePiece,Label,5-Plan Apo 60x NA 1.27 WI
PixelSize_um,60x_1x_EMCCD_largeFOV,0.2175
ConfigPixelSize,60x_1x_EMCCD_largeFOV,CSUW1-Port,Label,Back Camera
PixelSize_um,60x_1x_EMCCD_largeFOV,0.2175
ConfigPixelSize,60x_1x_EMCCD_largeFOV,CSUW1-Magnifier 2,Label,State-0
PixelSize_um,60x_1x_EMCCD_largeFOV,0.2175
ConfigPixelSize,60x_1x_EMCCD_largeFOV,TubeLens,DigitalInput,0
PixelSize_um,60x_1x_EMCCD_largeFOV,0.2175

# Resolution preset: 20x_1.5x_confocal
ConfigPixelSize,20x_1.5x_confocal,TINosePiece,Label,2-Plan Apo 20x NA 0.75 Dry
PixelSize_um,20x_1.5x_confocal,0.2212
ConfigPixelSize,20x_1.5x_confocal,TubeLens,DigitalInput,1
PixelSize_um,20x_1.5x_confocal,0.2212
ConfigPixelSize,20x_1.5x_confocal,CSUW1-Port,Label,Side Camera
PixelSize_um,20x_1.5x_confocal,0.2212
ConfigPixelSize,20x_1.5x_confocal,CSUW1-Magnifier 2,Label,State-0
PixelSize_um,20x_1.5x_confocal,0.2212

# Resolution preset: 100x_1x_EMCCD_largeFOV
ConfigPixelSize,100x_1x_EMCCD_largeFOV,TINosePiece,Label,6-Plan Apo VC 100x NA 1.40 Oil
PixelSize_um,100x_1x_EMCCD_largeFOV,0.13
ConfigPixelSize,100x_1x_EMCCD_largeFOV,CSUW1-Port,Label,Back Camera
PixelSize_um,100x_1x_EMCCD_largeFOV,0.13
ConfigPixelSize,100x_1x_EMCCD_largeFOV,CSUW1-Magnifier 2,Label,State-0
PixelSize_um,100x_1x_EMCCD_largeFOV,0.13
ConfigPixelSize,100x_1x_EMCCD_largeFOV,TubeLens,DigitalInput,0
PixelSize_um,100x_1x_EMCCD_largeFOV,0.13

# Resolution preset: 100x_1x_EMCCD_highres
ConfigPixelSize,100x_1x_EMCCD_highres,TINosePiece,Label,6-Plan Apo VC 100x NA 1.40 Oil
PixelSize_um,100x_1x_EMCCD_highres,0.0668
ConfigPixelSize,100x_1x_EMCCD_highres,CSUW1-Port,Label,Back Camera
PixelSize_um,100x_1x_EMCCD_highres,0.0668
ConfigPixelSize,100x_1x_EMCCD_highres,CSUW1-Magnifier 2,Label,Magnifier-2
PixelSize_um,100x_1x_EMCCD_highres,0.0668
ConfigPixelSize,100x_1x_EMCCD_highres,TubeLens,DigitalInput,0
PixelSize_um,100x_1x_EMCCD_highres,0.0668

# Resolution preset: 20x_1x_confocal
ConfigPixelSize,20x_1x_confocal,TINosePiece,Label,2-Plan Apo 20x NA 0.75 Dry
PixelSize_um,20x_1x_confocal,0.3251
ConfigPixelSize,20x_1x_confocal,CSUW1-Port,Label,Side Camera
PixelSize_um,20x_1x_confocal,0.3251
ConfigPixelSize,20x_1x_confocal,CSUW1-Magnifier 2,Label,State-0
PixelSize_um,20x_1x_confocal,0.3251
ConfigPixelSize,20x_1x_confocal,TubeLens,DigitalInput,0
PixelSize_um,20x_1x_confocal,0.3251

# Resolution preset: 10x_1x_EMCCD_largeFOV
ConfigPixelSize,10x_1x_EMCCD_largeFOV,TINosePiece,Label,1-Plan Apo 10x NA 0.45 Dry
PixelSize_um,10x_1x_EMCCD_largeFOV,1.2978
ConfigPixelSize,10x_1x_EMCCD_largeFOV,CSUW1-Port,Label,Back Camera
PixelSize_um,10x_1x_EMCCD_largeFOV,1.2978
ConfigPixelSize,10x_1x_EMCCD_largeFOV,CSUW1-Magnifier 2,Label,State-0
PixelSize_um,10x_1x_EMCCD_largeFOV,1.2978
ConfigPixelSize,10x_1x_EMCCD_largeFOV,TubeLens,DigitalInput,0
PixelSize_um,10x_1x_EMCCD_largeFOV,1.2978

# Resolution preset: 20x_1.5x_EMCCD_largeFOV
ConfigPixelSize,20x_1.5x_EMCCD_largeFOV,TINosePiece,Label,2-Plan Apo 20x NA 0.75 Dry
PixelSize_um,20x_1.5x_EMCCD_largeFOV,0.379
ConfigPixelSize,20x_1.5x_EMCCD_largeFOV,CSUW1-Port,Label,Back Camera
PixelSize_um,20x_1.5x_EMCCD_largeFOV,0.379
ConfigPixelSize,20x_1.5x_EMCCD_largeFOV,CSUW1-Magnifier 2,Label,State-0
PixelSize_um,20x_1.5x_EMCCD_largeFOV,0.379
ConfigPixelSize,20x_1.5x_EMCCD_largeFOV,TubeLens,DigitalInput,1
PixelSize_um,20x_1.5x_EMCCD_largeFOV,0.379

# Resolution preset: 4x_1x_confocal
ConfigPixelSize,4x_1x_confocal,TINosePiece,Label,3-Plan Apo 4x NA 0.20 Dry
PixelSize_um,4x_1x_confocal,0.1625
ConfigPixelSize,4x_1x_confocal,CSUW1-Port,Label,Side Camera
PixelSize_um,4x_1x_confocal,0.1625
ConfigPixelSize,4x_1x_confocal,CSUW1-Magnifier 2,Label,State-0
PixelSize_um,4x_1x_confocal,0.1625
ConfigPixelSize,4x_1x_confocal,TubeLens,DigitalInput,0
PixelSize_um,4x_1x_confocal,0.1625

# Resolution preset: 40x_1x_confocal
ConfigPixelSize,40x_1x_confocal,TINosePiece,Label,4-Plan Apo 40x NA 1.15 WI
PixelSize_um,40x_1x_confocal,0.1639
ConfigPixelSize,40x_1x_confocal,CSUW1-Port,Label,Side Camera
PixelSize_um,40x_1x_confocal,0.1639
ConfigPixelSize,40x_1x_confocal,CSUW1-Magnifier 2,Label,State-0
PixelSize_um,40x_1x_confocal,0.1639
ConfigPixelSize,40x_1x_confocal,TubeLens,DigitalInput,0
PixelSize_um,40x_1x_confocal,0.1639

# Resolution preset: 20x_1x_EMCCD_largeFOV
ConfigPixelSize,20x_1x_EMCCD_largeFOV,TINosePiece,Label,2-Plan Apo 20x NA 0.75 Dry
PixelSize_um,20x_1x_EMCCD_largeFOV,0.6492
ConfigPixelSize,20x_1x_EMCCD_largeFOV,CSUW1-Port,Label,Back Camera
PixelSize_um,20x_1x_EMCCD_largeFOV,0.6492
ConfigPixelSize,20x_1x_EMCCD_largeFOV,CSUW1-Magnifier 2,Label,State-0
PixelSize_um,20x_1x_EMCCD_largeFOV,0.6492
ConfigPixelSize,20x_1x_EMCCD_largeFOV,TubeLens,DigitalInput,0
PixelSize_um,20x_1x_EMCCD_largeFOV,0.6492

# Resolution preset: 20x_1x_EMCCD_highres
ConfigPixelSize,20x_1x_EMCCD_highres,TINosePiece,Label,2-Plan Apo 20x NA 0.75 Dry
PixelSize_um,20x_1x_EMCCD_highres,0.3341
ConfigPixelSize,20x_1x_EMCCD_highres,CSUW1-Port,Label,Back Camera
PixelSize_um,20x_1x_EMCCD_highres,0.3341
ConfigPixelSize,20x_1x_EMCCD_highres,CSUW1-Magnifier 2,Label,Magnifier-2
PixelSize_um,20x_1x_EMCCD_highres,0.3341
ConfigPixelSize,20x_1x_EMCCD_highres,TubeLens,DigitalInput,0
PixelSize_um,20x_1x_EMCCD_highres,0.3341

# Resolution preset: 40x_1.5x_EMCCD_largeFOV
ConfigPixelSize,40x_1.5x_EMCCD_largeFOV,TINosePiece,Label,4-Plan Apo 40x NA 1.15 WI
PixelSize_um,40x_1.5x_EMCCD_largeFOV,0.2215
ConfigPixelSize,40x_1.5x_EMCCD_largeFOV,CSUW1-Port,Label,Back Camera
PixelSize_um,40x_1.5x_EMCCD_largeFOV,0.2215
ConfigPixelSize,40x_1.5x_EMCCD_largeFOV,CSUW1-Magnifier 2,Label,State-0
PixelSize_um,40x_1.5x_EMCCD_largeFOV,0.2215
ConfigPixelSize,40x_1.5x_EMCCD_largeFOV,TubeLens,DigitalInput,1
PixelSize_um,40x_1.5x_EMCCD_largeFOV,0.2215

# Resolution preset: 40x_1x_EMCCD_highres
ConfigPixelSize,40x_1x_EMCCD_highres,TINosePiece,Label,4-Plan Apo 40x NA 1.15 WI
PixelSize_um,40x_1x_EMCCD_highres,0.1691
ConfigPixelSize,40x_1x_EMCCD_highres,CSUW1-Port,Label,Back Camera
PixelSize_um,40x_1x_EMCCD_highres,0.1691
ConfigPixelSize,40x_1x_EMCCD_highres,CSUW1-Magnifier 2,Label,Magnifier-2
PixelSize_um,40x_1x_EMCCD_highres,0.1691
ConfigPixelSize,40x_1x_EMCCD_highres,TubeLens,DigitalInput,0
PixelSize_um,40x_1x_EMCCD_highres,0.1691

# Resolution preset: 100x_1.5x_EMCCD_largeFOV
ConfigPixelSize,100x_1.5x_EMCCD_largeFOV,TINosePiece,Label,6-Plan Apo VC 100x NA 1.40 Oil
PixelSize_um,100x_1.5x_EMCCD_largeFOV,0.0873
ConfigPixelSize,100x_1.5x_EMCCD_largeFOV,CSUW1-Port,Label,Back Camera
PixelSize_um,100x_1.5x_EMCCD_largeFOV,0.0873
ConfigPixelSize,100x_1.5x_EMCCD_largeFOV,CSUW1-Magnifier 2,Label,State-0
PixelSize_um,100x_1.5x_EMCCD_largeFOV,0.0873
ConfigPixelSize,100x_1.5x_EMCCD_largeFOV,TubeLens,DigitalInput,1
PixelSize_um,100x_1.5x_EMCCD_largeFOV,0.0873

# Resolution preset: 10x_1.5x_EMCCD_largeFOV
ConfigPixelSize,10x_1.5x_EMCCD_largeFOV,TINosePiece,Label,1-Plan Apo 10x NA 0.45 Dry
PixelSize_um,10x_1.5x_EMCCD_largeFOV,0.8733
ConfigPixelSize,10x_1.5x_EMCCD_largeFOV,CSUW1-Port,Label,Back Camera
PixelSize_um,10x_1.5x_EMCCD_largeFOV,0.8733
ConfigPixelSize,10x_1.5x_EMCCD_largeFOV,CSUW1-Magnifier 2,Label,State-0
PixelSize_um,10x_1.5x_EMCCD_largeFOV,0.8733
ConfigPixelSize,10x_1.5x_EMCCD_largeFOV,TubeLens,DigitalInput,1
PixelSize_um,10x_1.5x_EMCCD_largeFOV,0.8733

# Resolution preset: 60x_1.5x_EMCCD_largeFOV
ConfigPixelSize,60x_1.5x_EMCCD_largeFOV,TINosePiece,Label,5-Plan Apo 60x NA 1.27 WI
PixelSize_um,60x_1.5x_EMCCD_largeFOV,0.1464
ConfigPixelSize,60x_1.5x_EMCCD_largeFOV,CSUW1-Port,Label,Back Camera
PixelSize_um,60x_1.5x_EMCCD_largeFOV,0.1464
ConfigPixelSize,60x_1.5x_EMCCD_largeFOV,CSUW1-Magnifier 2,Label,State-0
PixelSize_um,60x_1.5x_EMCCD_largeFOV,0.1464
ConfigPixelSize,60x_1.5x_EMCCD_largeFOV,TubeLens,DigitalInput,1
PixelSize_um,60x_1.5x_EMCCD_largeFOV,0.1464


